XCAT_XCAT_VCCN_XCAT_TBI_all2                                                     #!GUI1.0
0
/home/mcqa/MC/VC/VCCN_XCAT/01//VCCN_XCAT.egsphant
0.7, 0.01, 0
0, 0, 0
 2, 20, 1952, 1, 36.769554, 100.000000, 27.299999, 0, 0,
37.500000, -35.300000, 160.500000, 90.000000, 180.000000, 180.000000, 100.000000, 0.000000
37.500000, -35.300000, 160.500000, 90.000000, 180.000000, 180.000000, 100.000000, 0.002000
37.500000, -35.300000, 160.500000, 90.000000, 180.000000, 180.000000, 100.000000, 0.002000
37.500000, -35.300000, 160.500000, 90.000000, 180.000000, 180.000000, 100.000000, 0.003100
37.500000, -35.300000, 160.500000, 90.000000, 180.000000, 180.000000, 100.000000, 0.003100
37.500000, -35.300000, 160.500000, 90.000000, 180.000000, 180.000000, 100.000000, 0.006100
37.500000, -35.300000, 160.500000, 90.000000, 180.000000, 180.000000, 100.000000, 0.006100
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2, 2, 1, 60, 0, 0, 0, 0
particleDmlc,/home/mcqa/EGSnrc/EGS_HOME//BEAM_sync_JAWS/VCCN_XCAT_plan01_BEAM_JAW.1.IAEAphsp,/home/mcqa/MC/VC/VCCN_XCAT/01/VCCN_XCAT_plan01.txt
500000000, 0, 999, 377, 123, 100.0, 0, 0, 2, 1, 1, 0, 0, 0, 1, 0
 #########################
 :Start MC Transport Parameter:
 
 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 5
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= PRESTA-I
 Skin depth for BCA= 0
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= Simple
 Brems cross sections= BH
 Bound Compton scattering= Off
 Pair angular sampling= Simple
 Photoelectron angular sampling= Off
 Rayleigh scattering= Off
 Atomic relaxations= Off
 Electron impact ionization= Off
 
 Magnetic Field = 0, 0, 0
 EM ESTEPE = 0.2

 :Stop MC Transport Parameter:
 #########################
